PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flankertry2
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (70, 70)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    TextComponent text1
      letterHeight = 70
      pos = (0, 80)
      startVal [time (s)] = 1
      stopVal [time (s)] = 5
      text [set every repeat] = $text
      units = pix
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5
      store = all keys
      storeCorrect = True
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If the letter above the cross is G or E, press left arrow key
        If the letter above the cross is P or N, press right arrow key

        Press space bar to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = finalFlankersdata.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('text', 'G'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'E'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'P'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'N'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'OQCGCQO'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'FLTELFT'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'BRDPRBD'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'AHMNMHA'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'EEEGEEE'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'GGGEGGG'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'NNNPNNN'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'PPPNPPP'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'PPPGPPP'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'NNNENNN'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'EEEPEEE'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'GGGNGGG'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'GGGGGGG'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'EEEEEEE'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'PPPPPPP'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'NNNNNNN'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'XYAGHRR'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'RBDEQLW'), ('corr_resp', 'left')]),
      OrderedDict([('text', 'YZKPTAL'), ('corr_resp', 'right')]),
      OrderedDict([('text', 'KOLNFCB'), ('corr_resp', 'right')])]
    Routine trial
  LoopTerminator trials
